PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/'+('sub-'+ expInfo['participant'] + '_' + expName + '_raw')
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = N170
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be shown a series of images. Your task is to press the B button when you see an image that you have previously seen.

        Press any button to begin.
    JoyButtonsComponent button_resp_inst
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_stim
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    ImageComponent image
      image [set every repeat] = $name
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    JoyButtonsComponent button_resp
      allowedKeys [set every repeat] = 2
      deviceNumber = 0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $button_len
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    CodeComponent code_ISI
      Code Type = Auto->JS
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      Begin Routine:
        isi_len = np.random.uniform(0.75, 1.25, 1)
        button_len = isi_len + 0.3
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = .3
      stopVal [duration (s)] = $isi_len
      text [set every repeat] = +
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  Routine ISI
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    CodeComponent code_ISI_2
      Code Type = Auto->JS
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      Begin Routine:
        isi_len = np.random.uniform(0.75, 1.25, 1)
    TextComponent text_ISI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi_len
      text [set every repeat] = +
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  Routine end
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        That concludes the experiment.

        Press any button to finish the session.
    JoyButtonsComponent button_resp_end
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine instructions
  LoopInitiator image_loop loopType="TrialHandler"
    conditionsFile = $'N170stimulus_lists/sub-' + expInfo['participant']+'_N170_stimlist.csv'
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('filepath', 'images/objects/APOMEGRAN.jpg'), ('repeat_status', 'original'), ('stim_type', 'object')]),
      OrderedDict([('filepath', 'images/faces/male/Usain_Bolt.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/male/Daniel_Radcliffe.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/male/Roger_Federer.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/objects/26374798.thl.jpg'), ('repeat_status', 'original'), ('stim_type', 'object')]),
      OrderedDict([('filepath', 'images/faces/male/Chris_Rock.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/female/Barbara_Taylor_Bradford.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/objects/AWALNUT3.jpg'), ('repeat_status', 'original'), ('stim_type', 'object')]),
      OrderedDict([('filepath', 'images/faces/male/Ross_McEwan.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/female/Mary_Kate_Olsen.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/female/Katherine_Langford.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')]),
      OrderedDict([('filepath', 'images/faces/female/Scarlett_Johansson.jpg'), ('repeat_status', 'original'), ('stim_type', 'face')])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
    Routine image_stim
  LoopTerminator image_loop
  Routine end
